PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 2160]
  expName = eeg_experimemt
  eyetracker = Tobii Technology
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
  tbModel = Tobii Pro Fusion
  tbSampleRate = 120
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Routines
  Routine instructions
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In the following images, you will see some coffee beans. Hidden amongst them, there are some lips. Your task is to locate the lips. The image will change once you look at the lips for a certain amount of time.
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  Routine Thankyou
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent thank_you_message
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Thank you for your collaboration
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    EyetrackerRecordComponent stop_recording
      actionType = Stop Only
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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  Routine welcome
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent welcome_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this experiment
        Please, start the EEG recording
    EyetrackerRecordComponent start_recording
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine cross
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    ImageComponent image_2
      image = cross.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent upload_fix_im
      Code Type = Py
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      Begin Routine:
        # Create Psychopy image objects and upload media to Lab
        # Make sure the images have the same resolution as the screen
        im_name = 'cross.png'
        im = visual.ImageStim(win, image = im_name)
        prolab_list_media = ttl.list_media()['media_list']

        media_id = None

        # Upload media (if not already uploaded)
        print('Searching media in Tobii Pro Lab')
        if not ttl.find_media(im_name):
            print(f'Media "{im_name}" not found, uploading to Tobii Pro Lab')
            upload_response = ttl.upload_media(im_name, "image")
            media_id = upload_response['media_id']

        # If the media were uploaded already, just get their names and IDs.
        if media_id == None:
            print('Media found, organising media to match Tobii Pro Lab')
            for m in prolab_list_media:
                if im_name[:-4] == m['media_name']:
                    media_id = m['media_id']
                    break

        t_onset = int(ttl.get_time_stamp()['timestamp'])
        print('t_onset', t_onset)
      End Routine:
        t_offset = int(ttl.get_time_stamp()['timestamp'])
        print('t_offset', t_offset)

        # Send stimulus event
        ttl.send_stimulus_event(rec['recording_id'],
                                str(t_onset),
                                media_id,
                                end_timestamp=str(t_offset))
  Routine trial
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    ImageComponent image
      image [set every repeat] = $images
      startVal [time (s)] = 0.0
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    CodeComponent talk_to_prolab_code
      Code Type = Py
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      Before Experiment:
        from titta import Titta, helpers_tobii as helpers
        from titta.TalkToProLab import TalkToProLab
        from psychopy import monitors

        #%% ET settings
        # et_name = 'Tobii Pro Spark'
        et_name = 'Tobii Pro Fusion'
        # et_name = 'Tobii Pro Nano'
        # et_name = 'Tobii Pro Spectrum'

        dummy_mode = False
        project_name = None # None or a project name that is open in Pro Lab.
                            # If None, the currently opened project is used.

        # Change any of the default settings?
        settings = Titta.get_defaults(et_name)

        #%% Connect to eye tracker and calibrate (you need to do this outside of lab)
        tracker = Titta.Connect(settings)
        if dummy_mode:
            tracker.set_dummy_mode()
        tracker.init()

        #%% Talk to Pro Lab
        ttl = TalkToProLab(project_name=project_name,
                           dummy_mode=dummy_mode)
      Begin Experiment:
        settings.FILENAME = expInfo['participant']

        # Participant ID and Project name for Lab
        pid = settings.FILENAME

        participant_info = ttl.add_participant(pid)
        # Calibrate (must be done independently of Lab). You can do it either with the
        # Psychopy build-in calibration, or you can use the Titta calibration by
        # uncommenting the next two lines.
        # tracker.calibrate(win)
        # win.flip()

        #%% Recording

        # Check that Lab is ready to start a recording
        state = ttl.get_state()
        assert state['state'] == 'ready', state['state']

        ## Start recording (Note: you have to click on the Record Tab first!)
        rec = ttl.start_recording("image_viewing",
                            participant_info['participant_id'],
                            screen_width=1920,
                            screen_height=1080)
      Begin Routine:
        # Create Psychopy image objects and upload media to Lab
        # Make sure the images have the same resolution as the screen
        im_name = images # use image path from spreadsheet, the name of the variable corresponds to the name of the column in the table
        im = visual.ImageStim(win, image=im_name)

        print('Searching media in Tobii Pro Lab')
        prolab_list_media = ttl.list_media()['media_list']

        media_id = None

        # Upload media (if not already uploaded)
        print('Searching media in Tobii Pro Lab')
        if not ttl.find_media(im_name):
            print(f'Media "{im_name}" not found, uploading to Tobii Pro Lab')
            upload_response = ttl.upload_media(im_name, "image")
            media_id = upload_response['media_id']

        # If the media were uploaded already, just get their names and IDs.
        if media_id == None:
            print('Media found, organising media to match Tobii Pro Lab')
            for m in prolab_list_media:
                if im_name[:-4] == m['media_name']:
                    media_id = m['media_id']
                    break

        t_onset = int(ttl.get_time_stamp()['timestamp'])
        print('t_onset', t_onset)
      End Experiment:
        ## Stop recording
        ttl.send_message(ttl.external_presenter_address,
            {"operation": "StopRecording"})
        win.close()

        #%% Finalize the recording
        # Finalize recording
        print(rec)
        print(rec['recording_id'])
        ttl.send_message(ttl.external_presenter_address,
            {"operation": "FinalizeRecording",
            "recording_id": rec['recording_id']})
        print('recording has been finalized')
        ttl.disconnect()
      End Routine:
        t_offset = int(ttl.get_time_stamp()['timestamp'])
        print('t_offset', t_offset)

        # Send stimulus event
        ttl.send_stimulus_event(rec['recording_id'],
                                str(t_onset),
                                media_id,
                                end_timestamp=str(t_offset))
    CodeComponent eeg_trigger
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import serial
        port = serial.Serial(port="COM7",baudrate=2000000)
      Begin Routine:
        #Mark the stimulus onset triggers as "not sent"
        #at the start of the trial
        stimulus_pulse_started = False
        stimulus_pulse_ended = False

        # Define the trigger based on the difficulty level of the image
        if diff_level == 'low':
            diff_trigger = [0x01]
        else:
            diff_trigger = [0x02]
      Each Frame:
        ##STIMULUS TRIGGERS##
        #Check to see if the stimulus is presented this frame
        #and send the trigger if it is
        if image.status == STARTED and not stimulus_pulse_started: #Change 'image' to match the name of the component that you want to send the trigger for
            win.callOnFlip(port.write, diff_trigger)
            stimulus_pulse_start_time = globalClock.getTime()
            stimulus_pulse_started  = True
        #If it's time to end the pulse, reset the value to "0"
        #so that we don't continue sending triggers on every frame
        if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.1:
                    win.callOnFlip(port.write, [0x00])
                    stimulus_pulse_ended = True
    RegionOfInterestComponent target
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (target_x, target_y)
      save = every look
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent AOI_Debuging
      disabled = True
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = (target_x, target_y)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_position
      disabled = True
      fillColor = white
      pos [set every frame] = eyetracker.getPos()
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.xlsx
    loopType = sequential
    nReps = 10
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    conditions:
      [{'images': 'img1.png', 'diff_level': 'low', 'target_x': 0.160185185185185, 'target_y': -0.436111111111111},
      {'images': 'img2.png', 'diff_level': 'high', 'target_x': 0.758333333333333, 'target_y': -0.099074074074074},
      {'images': 'img3.png', 'diff_level': 'high', 'target_x': 0.425, 'target_y': -0.207407407407407},
      {'images': 'img4.png', 'diff_level': 'high', 'target_x': -0.427777777777777, 'target_y': -0.191666666666666},
      {'images': 'img5.png', 'diff_level': 'low', 'target_x': -0.509259259259259, 'target_y': 0.141666666666666},
      {'images': 'img6.png', 'diff_level': 'low', 'target_x': 0.675925925925925, 'target_y': 0.29537037037037}]
    Routine cross
    Routine trial
  LoopTerminator trials
  Routine Thankyou
